PsychoPy2experiment version="2024.1.0rc17"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Trials
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine fixed_interval
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    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine random_interval
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    TextComponent fix_rand
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
      text = +
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  Routine blank
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  Routine instruct_image
    TextboxComponent text_instr
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-0.5, 0.5)
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      text = This is a template using a Textbox Component to present instructions.
      units = norm
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
    ImageComponent image_instr1
      image = templates/instruct1.png
      pos = (0.5, 0.5)
      size = (0.8, None)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent icons_label
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-0.5, -0.1)
      size = (0.8, 0.2)
      startVal [time (s)] = 0.0
      text = Some handy buttons and icons:
      units = norm
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    ImageComponent clicknext_icon
      image = clicknext.png
      pos = (-0.5, -0.4)
      size = (None, 0.18)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent touchnext_icon
      image = touchnext.png
      pos = (-0.5, -0.6)
      size = (None, 0.18)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent click_icon
      image = click.png
      pos = (-0.7, -0.8)
      size = (None, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent touch_icon
      image = touch.png
      pos = (-0.3, -0.8)
      size = (None, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_instr2
      image = templates/instruct2.png
      pos = (0.5, -0.3)
      size = (0.8, None)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_next
      image = next.png
      pos = (0.7, -0.7)
      size = (None, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine instruct_norm
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Any text

        including line breaks

        This text component is white, so change the colour if you have a white background. It does not save the onset and offset time, but has been left justified with a wrap width of 1.8 norm units.

        Press the spacebar to continue
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
Flow
  Routine instruct_image
